//Updated 12.2.2014 10:26
#pragma rtGlobals=1		// Use modern global access method.

#include "PELICAN"
#include "PELICAN_Gizmo"
#include "PELICAN_Angles"

#include "Spectra_Includes"
#include "Polarization"
#include "ImageStitching"
#include "ImageAlign"
#include "Polarization_MT"


//Menu "PELICAN"
//	"Load PELICAN Package"
//	SubMenu "PELICAN"
//	"PELICAN/1"
//		"Display PELICAN RGB/2"
//		"Pelican Scale Circle"
//		"Display PELICAN Histograms"
//		"Display PELICAN Gizmo"
//		"Export PELICAN Figures/E"
//		"Export PELICAN Color Bar"
//		"Calculate Neighbor Angles/G"
//		"Kill Histograms"
//	End
//	SubMenu "Polarization"
//		"Display Polarization Panel"
//		"Display Stack Operation Panel"
//		"Image Stitching"
//		"Align Stack"
//	End
//	"Unload PELICAN Package"
//End

Proc UnloadPELICANPackage()
	
	Execute/P "DELETEINCLUDE \"PELICAN_Includes\""
	Execute/P/Q "COMPILEPROCEDURES "
End