//Updated 12.2.2014 10:26
#pragma rtGlobals=1		// Use modern global access method.

#include "Spectra_Includes"
#include "Polarization"
#include "ImageStitching"
#include "ImageAlign"
#include "Polarization_MT"
#include "PELICAN"

//Menu "Polarization"
//	SubMenu "PELICAN"
////		"Pelican/1"
////		"Display PELICAN RGB/2"
////		"Pelican Scale Circle"
////		"Display PELICAN Histograms"
////		"Display PELICAN Gizmo"
////		"Export PELICAN Figures/E"
////		"Export PELICAN Color Bar/C"
////		"Calculate Neighbor Angles/G"
////		"K Means Cluster Analysis"
////		"Kill Histograms"
//	End
//	"Display Polarization Panel"
//	"Display Stack Operation Panel"
//	"Image Stitching"
//	"Align Stack"
//	"Unload Polarization Package"
//End

Function UnloadPolarizationPackage()
	
	Execute/P "DELETEINCLUDE \"Polarization_Includes\""
	Execute/P/Q "COMPILEPROCEDURES "
End